 
#### CELL ####
s:Ge/MyCell/Type="TsSphericalCellSphericalNP"
s:Ge/MyCell/Material="Cytoplasm"
s:Ge/MyCell/Parent="World"
d:Ge/MyCell/CellRadius= 5.0 um
s:Ge/MyCell/Color="white"

#NUCLEUS
d:Ge/MyCell/Nucleus/NucleusRadius= 3.0 um 
s:Ge/MyCell/Nucleus/Material="Nucleoplasm"
d:Ge/MyCell/Nucleus/translateX = 0.0 um
d:Ge/MyCell/Nucleus/translateY = 0.0 um
d:Ge/MyCell/Nucleus/translateZ = 0.0 um
s:Ge/MyCell/Nucleus/DrawingStyle="wireframe"
s:Ge/MyCell/Nucleus/Color="red"

#MITOCHONDRIA - optional
i:Ge/MyCell/Mitochondria/NumberOfMitochondria= 10
d:Ge/MyCell/Mitochondria/a= 500 nm
d:Ge/MyCell/Mitochondria/b= 500 nm
d:Ge/MyCell/Mitochondria/c= 500 nm 
s:Ge/MyCell/Mitochondria/Material="Cytoplasm"
s:Ge/MyCell/Mitochondria/Color="grass"
s:Ge/MyCell/Mitochondria/DrawingStyle="wireframe"

#MEMBRANE - optional
d:Ge/MyCell/Membrane/Thickness = 10.0 nm
s:Ge/MyCell/Membrane/Material="Cytoplasm"
s:Ge/MyCell/Membrane/Color="grass"
s:Ge/MyCell/Membrane/DrawingStyle="wireframe"

#NANOPARTICLES - optional
i:Ge/MyCell/Nanoparticle/NumberOfNanoparticles = 1000
d:Ge/MyCell/Nanoparticle/r = 50 nm
s:Ge/MyCell/Nanoparticle/Material = "Gold"
s:Ge/MyCell/Nanoparticle/Color = "yellow"
s:Ge/MyCell/Nanoparticle/DrawingStyle = "solid"
